CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:OriginalImage
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:OriginalImage
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:No
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    Convert green to gray?:Yes
    Name the output image:GrayImage
    Convert blue to gray?:No
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
ImageMath:[module_num:6|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedGray
    Image or measurement?:Image
    Select the first image:GrayImage
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:InvertedGray
    Name the primary objects to be identified:PotentialCells
    Typical diameter of objects, in pixel units (Min,Max):11,800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:PotentialCells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

FilterObjects:[module_num:9|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
    Select the objects to filter:PotentialCells
    Name the output objects:MatureOsteoclasts
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:400
    Filter using a maximum measurement value?:No
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
ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Documents/CellProfilerResults
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
ConvertObjectsToImage:[module_num:11|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
    Select the input objects:MatureOsteoclasts
    Name the output image:OsteoclastMask
    Select the color format:Binary (black & white)
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
OverlayObjects:[module_num:12|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
    Input:OriginalImage
    Name the output image:SegmentedImage
    Objects:MatureOsteoclasts
    Opacity:0.3

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:OsteoclastMask
    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:mask
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/CellProfilerResults
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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notes:['']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
    Select the type of image to save:Image
    Select the image to save:SegmentedImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:OriginalImage
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:segmented
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Documents/CellProfilerResults
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
